PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = multiEF-Practice
  logging level = debug
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Routines
  Routine break_cueLoop
    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        cueLoop.finished=True
  Routine cueRoutine
    CodeComponent rsiCode
      Code Type = Both
      Begin Experiment:
        reminderDur = 1000
      Begin JS Experiment:
        reminderDur = 1000;
      Begin JS Routine:
        RSIRange = linspace(1000, 1500, 500);
        shuffle(RSIRange);
        thisRSI = (RSIRange[0] / 1000);
        reminderDur = (thisRSI + 1);
        console.log("thisRSI: ", thisRSI);
        cueLoop.addData("RSI", thisRSI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        RSIRange = np.linspace(1000, 1500, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(RSIRange)
        thisRSI = RSIRange[0]/1000 # the first item of the shuffled array

        reminderDur = thisRSI +1

        # show in console for debugging
        print('thisRSI: ', thisRSI)

        # save this ISI to our output file
        cueLoop.addData('RSI', thisRSI)
    TextComponent LeftReminder_text_3
      letterHeight = .035
      pos = (-.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $leftReminder
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    TextComponent rightReminder_text_3
      letterHeight = .035
      pos = (.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $rightReminder
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    TextComponent cuePresented
      letterHeight = .035
      startVal [time (s)] = $thisRSI
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $whichCue
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    CodeComponent cue_code
      Code Type = Auto->JS
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      Begin Experiment:
        #1
        import serial
        import time
        import threading
        Connected = True
        def ReadThread(port):
            while Connected:
                if port.inWaiting() > 0:
                    print ("0x%X"%ord(port.read(1)))
        #port = serial.Serial('COM3')
        #Start the read thread
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
        port.write([0xFF])
      Begin Routine:
        #2
        pulse_started = False
        pulse_ended = False
      Each Frame:
        #3
        if cuePresented.status == STARTED and not pulse_started:
            if whichCue == 'SHAPE':
                port.write([0x01])#S1 for 'SHAPE' cue.
                pulse_start_time = globalClock.getTime()
                pulse_started = True
            elif whichCue == 'COLOR':
                port.write([0x02])#S2 for 'COLOR' cue.
                pulse_start_time = globalClock.getTime()
                pulse_started = True
        if pulse_started and not pulse_ended:
            if globalClock.getTime() - pulse_start_time >= 0.005:
                #port.write([0x02])
                pulse_ended = True
      End Experiment:
        #5
        port.close()
      End Routine:
        #4
  Routine StimRoutine
    CodeComponent isiCode
      Code Type = Both
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        reminderDur = (thisISI + 1.5);
        console.log("thisISI: ", thisISI);
        stimLoop.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1000, 1500, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        reminderDur = thisISI +1.5

        # show in console for debugging
        print('thisISI: ', thisISI)

        # save this ISI to our output file
        stimLoop.addData('ISI', thisISI)
    CodeComponent corrAnswerCode
      Code Type = Auto->JS
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      Begin Experiment:
        #possible cb:
        #BSOD
        #BDOS
        #ODBS
        #OSBD

        #hard-coded counterbalance for now. will update
        #to change based on user input
        CB = 'BSOD'

        if CB =='BSOD':
            blueKey = '1'
            squareKey = '1'
            orangeKey = '8'
            diagKey = '8'
        elif CB =='BDOS':
            blueKey = '1'
            squareKey = '8'
            orangeKey = '8'
            diagKey = '1'
        elif CB =='ODBS':
            blueKey = '8'
            squareKey = '8'
            orangeKey = '1'
            diagKey = '1'
        elif CB =='OSBD':
            blueKey = '8'
            squareKey = '1'
            orangeKey = '1'
            diagKey = '8'
      Begin Routine:
        if whichCue == 'SHAPE':
            if rotCenter == 315:
                corrAns = diagKey
            else:
                corrAns = squareKey
        elif whichCue == 'COLOR':
            if blueCenter == 1:
                corrAns = blueKey
            else:
                corrAns = orangeKey
        #elif whichCue == '1BACK COLOR':
        #    if back1_blueCenter == 1:
        #        corrAns = blueKey
        #    else:
        #        corrAns = orangeKey
        #elif whichCue == '1BACK SHAPE':
        #    if back1_blueCenter == 1:
        #        corrAns = diagKey
        #    else:
        #        corrAns = squareKey
        #elif whichCue == '2BACK COLOR':
        #    if back2_blueCenter == 1:
        #        corrAns = blueKey
        #    else:
        #        corrAns = orangeKey
        #elif whichCue == '2BACK SHAPE':
        #    if back2_blueCenter == 1:
        #        corrAns = diagKey
        #    else:
        #        corrAns = squareKey

        # save corrAns to our output file
        stimLoop.addData('corrAns', corrAns)


        #        if key_resp_3.corr:
        #            corrAns == 'm'
        #            right = 'resources/assets/BlueBoatWhite.png'
        #        else:
        #            left = 'resources/assets/RedRabbitWhite.png'
        #    elif key_resp_3.keys[0] =='m':
        #        if key_resp_3.corr:
        #            right = 'resources/assets/BlueBoatRed.png'
        #           left = 'resources/assets/RedRabbitWhite.png'
        #           audio = 'resources/assets/Thatsright.mp3'
        #       else:
        #else: # thi is classed as an incorrect response
        #    if corrAns == 'm':
        #        right = 'resources/assets/BlueBoatRed.png'


        ## make range from a to b in n stepsizes
        #ISIRange = np.linspace(1000, 1500, 500)
        ## picking from a shuffled array is easier for random selection in JS
        #shuffle(ISIRange)
        #thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        ## show in console for debugging
        #print('thisISI: ', thisISI)
    TextComponent LeftReminder_text_4
      letterHeight = .035
      pos = (-.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $leftReminder
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    TextComponent rightReminder_text_4
      letterHeight = .035
      pos = (.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $rightReminder
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    ImageComponent centerPresented
      image [set every repeat] = $center
      ori [set every repeat] = $rotCenter
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1
      texture resolution = 512
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    ImageComponent topPresented
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (0, .18)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent rightPresented
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (.18, 0)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent bottomPresented
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (0, -.18)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent leftPresented
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (-.18, 0)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    CodeComponent stim_code
      Code Type = Auto->JS
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      Begin Experiment:
        #1
        Connected = True

        #Start the read thread
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
      Begin Routine:
        # Clear ports
        #port.write([0xFF])



        # time to wait before clearing the ports after a trigger (in seconds)
        postTriggerPauseTime_1 = 0.04
        pauseStartTime_1 = 0
        triggerSent_1 = False
        portsCleared_1 = False
      Each Frame:
        #3
        if centerPresented.status == STARTED and not triggerSent_1:#
            if ethnicity == 1 and rotCenter == 0:
                port.write([0x17]) #S23
                time.sleep(PulseWidth)
                triggerSent_1 = True
                pauseStartTime_1 = t
            elif ethnicity == 1 and rotCenter == 45:#
                port.write([0x1B])#S27
                time.sleep(PulseWidth)
                triggerSent_1 = True
                pauseStartTime_1 = t
            elif ethnicity == 2 and rotCenter == 0:#
                port.write([0x21])#S33
                time.sleep(PulseWidth)
                triggerSent_1 = True
                pauseStartTime_1 = t
            elif ethnicity == 2 and rotCenter == 45:#
                port.write([0x25])#S37
                time.sleep(PulseWidth)
                triggerSent_1 = True
                pauseStartTime_1 = t
            elif ethnicity == 3 and rotCenter == 0:#
                port.write([0x2B])#S43
                time.sleep(PulseWidth)
                triggerSent_1 = True
                pauseStartTime_1 = t
            elif ethnicity == 3 and rotCenter == 45:#
                port.write([0x2F])#S47
                time.sleep(PulseWidth)
                triggerSent_1 = True
                pauseStartTime_1 = t
            elif ethnicity == 4 and rotCenter == 0:#
                port.write([0x35])#S53
                time.sleep(PulseWidth)
                triggerSent_1 = True
                pauseStartTime_1 = t
            elif ethnicity == 4 and rotCenter == 45:#
                port.write([0x39])#S57
                time.sleep(PulseWidth)
                triggerSent_1 = True
                pauseStartTime_1 = t

        # we send the 2nd trigger after 40 ms.
        if triggerSent_1 and not portsCleared_1:
            if t > (pauseStartTime_1 + postTriggerPauseTime_1):
                if male == 0:
                    if scramFace == 0:
                        if blueCenter == 0:
                            if blueSurround ==0:
                                if rotSurround == 0:
                                    port.write([0x68])# S104 for non resp
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0x6C])#S108
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                            elif blueSurround == 1:
                                if rotSurround == 0:
                                    port.write([0x70])# S112
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0x75])#S117
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                        elif blueCenter == 1:
                            if blueSurround ==0:
                                if rotSurround == 0:
                                    port.write([0x79])# S121 for non resp
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0x7D])#S125
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                            elif blueSurround == 1:
                                if rotSurround == 0:
                                    port.write([0x82])# S130
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0x86])#S134
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                    elif scramFace == 1:
                        if blueCenter == 0:
                            if blueSurround ==0:
                                if rotSurround == 0:
                                    port.write([0x8A])# S138 for non resp
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0x8E])#S142
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                            elif blueSurround == 1:
                                if rotSurround == 0:
                                    port.write([0x92])# S146
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0x96])#S150
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                        elif blueCenter == 1:
                            if blueSurround ==0:
                                if rotSurround == 0:
                                    port.write([0x9A])# S154 for non resp
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0x9E])#S158
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                            elif blueSurround == 1:
                                if rotSurround == 0:
                                    port.write([0xA2])# S162
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0xA6])#S166
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                elif male ==1:
                    if scramFace == 0:
                        if blueCenter == 0:
                            if blueSurround ==0:
                                if rotSurround == 0:
                                    port.write([0xAA])# S170 for non resp
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0xAE])#S174
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                            elif blueSurround == 1:
                                if rotSurround == 0:
                                    port.write([0xB2])# S178
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0xB6])#S182
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                        elif blueCenter == 1:
                            if blueSurround ==0:
                                if rotSurround == 0:
                                    port.write([0xBA])# S186 for non resp
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0xBE])#S190
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                            elif blueSurround == 1:
                                if rotSurround == 0:
                                    port.write([0xC2])# S194
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0xC6])#S198
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                    elif scramFace == 1:
                        if blueCenter == 0:
                            if blueSurround ==0:
                                if rotSurround == 0:
                                    port.write([0xCA])# S202 for non resp
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0xCE])#S206
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                            elif blueSurround == 1:
                                if rotSurround == 0:
                                    port.write([0xD2])# S210
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0xD6])#S214
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                        elif blueCenter == 1:
                            if blueSurround ==0:
                                if rotSurround == 0:
                                    port.write([0xDA])# S218 for non resp
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0xDE])#S222
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                            elif blueSurround == 1:
                                if rotSurround == 0:
                                    port.write([0xE2])# S226
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
                                elif rotSurround == 45:
                                    port.write([0xE6])#S230
                                    time.sleep(PulseWidth)
                                    #triggerSent_1 = False
                                    portsCleared_1 = True
      End Experiment:
        #5
        port.close()
      End Routine:
        #4

        Connected = False
        thread.join(1.0)
    KeyboardComponent keyResp
      allowedKeys = '1','8'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent resp_code
      Code Type = Auto->JS
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      Begin Experiment:
        #1

        Connected = True

        #Start the read thread
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
      Begin Routine:
        #2
        mark_started = False
        mark_ended = False

        # Clear ports
        port.write([0x00])
        Connected = False
        thread.join(1.0)

        keys_counted = []

        # time to wait before clearing the ports after a trigger (in seconds)
        postTriggerPauseTime = 0.05
        pauseStartTime = 0
        triggerSent = False
        portsCleared = True
      Each Frame:
        #3
        if keyResp.keys and len(keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(keyResp.keys[-1])
            if keyResp.keys[-1] == corrAns:# if the last key pressed was correct
                port.write([0x10]) # send trigger
                time.sleep(PulseWidth)
                triggerSent = True
                portsCleared = False
                pauseStartTime = t
            elif keyResp.keys[-1] != corrAns:# if the last key pressed was not correct
                port.write([0x04])# send different trigger
                time.sleep(PulseWidth)
                triggerSent = True
                portsCleared = False
                pauseStartTime = t

        # if a trigger was send, "clear" the bugger after 100ms
        if triggerSent and not portsCleared:
            if t > (pauseStartTime + postTriggerPauseTime):
                triggerSent = False
                portsCleared = True
      End Experiment:
        #5
        port.close()
      End Routine:
        #4
        if not keyResp.keys or len(keyResp.keys) == 0:
               port.write([0x03])# send a trigger
               time.sleep(PulseWidth)
  Routine break_stimLoop
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #back1_rotCenter = 999
        #back1_blueCenter = 999

        #back2_rotCenter = 999
        #back2_blueCenter = 999
      End Routine:
        #store 1back stim from this trial as 2back for next trial
        #back2_rotCenter = back1_rotCenter
        #back2_blueCenter = back1_blueCenter

        #store current stim from this trial as 1back for next trial
        #back1_rotCenter = rotCenter
        #back1_blueCenter = blueCenter

        stimLoop.finished=True
  Routine beginInstruct
    TextComponent begin_text1
      letterHeight = .025
      pos = (0, .35)
      startVal [time (s)] = 0.0
      wrapWidth = 23
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      text:
        Welcome to BRAIN GAMES!

        Here, you will play a series of computer games.

        Each game will involve a set of 5 images being flashed on the screen, similar to the set below:
    CodeComponent stim_code_bgin
      Code Type = Auto->JS
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      Before Experiment:
        import serial
        import time
        import threading
        def ReadThread(port):
            while Connected:
                if port.inWaiting() > 0:
                    print ("0x%X"%ord(port.read(1)))
        port = serial.Serial('COM3')
        PulseWidth = 0.002
      Begin Experiment:
        #1
        Connected = True
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
        port.write([0xFF])
        time.sleep(PulseWidth)
      Begin Routine:
        #2
        pulse_started = False
        pulse_ended = False
      Each Frame:
        #3
        if begin_text1.status == STARTED and not pulse_started:
            port.write([0x01])
            time.sleep(PulseWidth)
            pulse_start_time = globalClock.getTime()
            pulse_started = True
        if pulse_started and not pulse_ended:
            if globalClock.getTime() - pulse_start_time >= 0.005:
                #port.write([0x01])
                pulse_ended = True
      End Experiment:
        #5
        port.close()
      End Routine:
        #4
        #port.write([0xFF])
        Connected = False
        thread.join(1.0)
    ImageComponent pracImage_center
      image = images/2M2_Sc_BD.jpg
      size = (.1, .1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent pracImage_top
      image = images/2M2_Sc_BD.jpg
      pos = (0, .18)
      size = (.1, .1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent pracImage_right
      image = images/2M2_Sc_BD.jpg
      pos = (.18, 0)
      size = (.1, .1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent pracImage_bottom
      image = images/2M2_Sc_BD.jpg
      pos = (0, -.18)
      size = (.1, .1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent pracImage_left
      image = images/2M2_Sc_BD.jpg
      pos = (-.18, 0)
      size = (.1, .1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent begin_keyResp
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent begin_text2
      letterHeight = .025
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 23
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      text:
        Sometimes the images flashed on the screen will all be the same (like the set of images above).

        Press the left or right button to continue
    CodeComponent resp_code_bgin
      Code Type = Auto->JS
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      Begin Experiment:
        #1

        Connected = True
        #Start the read thread
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
      Begin Routine:
        #2
        mark_started = False
        mark_ended = False
      Each Frame:
        #3
        if begin_keyResp.keys == 'space' and not mark_started:
            port.write([0x10])
            time.sleep(PulseWidth)
            mark_start_time = globalClock.getTime()
            mark_started = True
        if mark_started and not mark_ended:
            if globalClock.getTime() - mark_start_time >= 0.4:
                #port.write([0x32])
                mark_ended = True
      End Experiment:
        #5
        port.close()
      End Routine:
        #4
        port.write([0xFF])
        time.sleep(PulseWidth)
        Connected = False
        thread.join(1.0)
  Routine beginInstruct_2
    TextComponent begin_text1_2
      letterHeight = .7
      startVal [time (s)] = 0.0
      wrapWidth = 24
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      text:
        Sometimes the 5 images flashed on the screen will differ in color, shape, or other features. For example, see below:

        However, you only need to respond to the central image and should ignore the rest.
    TextComponent begin_text2_2
      letterHeight = 0.7
      pos = (0, -7)
      startVal [time (s)] = 0.0
      text = Press the space key to continue
      wrapWidth = 22
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    KeyboardComponent begin_keyResp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beginInstruct_3
    TextComponent begin_text1_3
      letterHeight = .7
      startVal [time (s)] = 0.0
      wrapWidth = 24
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      text:
        In every game you play, you will respond to the central image by pressing either the Z key or the M key.

        However, the rules of how to respond to the images will be different in each game.

        In every game, you should respond as quickly as you can while also being correct.
    TextComponent begin_text2_3
      letterHeight = 0.7
      pos = (0, -5)
      startVal [time (s)] = 0.0
      text = Press the space key to continue
      wrapWidth = 22
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    KeyboardComponent begin_keyResp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beginInstruct_3a
    TextComponent begin_text1_3a
      letterHeight = .025
      startVal [time (s)] = 0.0
      wrapWidth = 23
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      text:
        The rules for how to you should respond to central image
        will be different in each game you play today.

        Before each game starts, you will be informed of the game's
        rules and be given a chance to practice before playing the
        real game.

        Are you ready to learn about the first game?
    TextComponent begin_text2_3a
      letterHeight = .025
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press the left or right button to continue
      wrapWidth = 23
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    KeyboardComponent begin_keyResp_3a
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beginInstruct_2a
    TextComponent begin_text1_4
      letterHeight = .025
      pos = (0, .35)
      startVal [time (s)] = 0.0
      wrapWidth = 23
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      text:
        Sometimes the images flashed on the screen will differ
        in their color or shape (like the set of images below).
    ImageComponent pracImage_center_2
      image = images/2M2_Sc_OD.jpg
      ori = 315
      size = (.1, .1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent pracImage_top_2
      image = images/2M2_Sc_BD.jpg
      pos = (0, .18)
      size = (.1, .1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent pracImage_right_2
      image = images/2M2_Sc_BD.jpg
      pos = (.18, 0)
      size = (.1, .1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent pracImage_bottom_2
      image = images/2M2_Sc_BD.jpg
      pos = (0, -.18)
      size = (.1, .1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent pracImage_left_2
      image = images/2M2_Sc_BD.jpg
      pos = (-.18, 0)
      size = (.1, .1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent begin_keyResp_4
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent begin_text2_4
      letterHeight = .025
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 23
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      text:
        However, you only need to respond to the central image and should ignore the rest.



        Press the left or right button to continue
  Routine task_instruct
    CodeComponent pracOrMain_Code
      Code Type = Auto->JS
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      Begin Routine:
        if CB =='BSOD':
            blueKey = '1'
            squareKey = '1'
            orangeKey = '8'
            diagKey = '8'
            if whichBlock == 'color.xlsx':
                leftKeyText = 'the center image is BLUE \n'
                rightKeyText = '\n \n \n \n \n \n the center image is ORANGE'
                leftReminder = 'BLUE - SQUARE'
                rightReminder = 'ORANGE - DIAMOND'
            elif whichBlock == 'shape.xlsx':
                leftKeyText = 'the center image is a SQUARE \n'
                rightKeyText = '\n \n \n \n \n \n the center image is DIAMOND'
                leftReminder = 'BLUE - SQUARE'
                rightReminder = 'ORANGE - DIAMOND'
            elif whichBlock == 'switch.xlsx':
                leftKeyText = '\n \n \n \n \n the word says COLOR and the image is BLUE, \n or if the word says SHAPE and the image is a SQUARE \n'
                rightKeyText = '\n \n \n \n \n \n \n \n \n \n \n \n \n the word says COLOR and the image is ORANGE, \n or if the word says SHAPE and the image is a DIAMOND'
                leftReminder = 'BLUE - SQUARE'
                rightReminder = 'ORANGE - DIAMOND'
        #    elif whichBlock == 'oneBackColor.xlsx':
        #        leftKeyText = 'the center image is the SAME COLOR as \n the image presented one image previously (1BACK) \n'
        #        rightKeyText = '\n \n \n \n \n \n \n \n \n \n the center image is a DIFFERENT COLOR as \n the image presented one image previously (1BACK)'
        #        leftReminder = 'SAME'
        #        rightReminder = 'DIFFERENT'
        #    elif whichBlock == 'twoBackColor.xlsx':
        #        leftKeyText = 'the center image is the SAME COLOR as \n the image presented TWO images previously (2BACK) \n'
        #        rightKeyText = '\n \n \n \n \n \n \n \n \n \n the center image is the DIFFERENT COLOR as \n the image presented TWO images previously (2BACK)'
        #        leftReminder = 'SAME'
        #        rightReminder = 'DIFFERENT'

        elif CB =='BDOS':
            blueKey = '1'
            squareKey = '8'
            orangeKey = '8'
            diagKey = '1'
        elif CB =='ODBS':
            blueKey = '8'
            squareKey = '8'
            orangeKey = '1'
            diagKey = '1'
        elif CB =='OSBD':
            blueKey = '8'
            squareKey = '1'
            orangeKey = '1'
            diagKey = '8'
    TextComponent taskName
      letterHeight = .035
      pos = (0, .387)
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskNameSource
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    TextComponent task_Text
      letterHeight = .025
      pos = (0, .141)
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskTextSource
      wrapWidth = 22
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    TextComponent leftKey_text
      letterHeight = .025
      pos = (0, .106)
      startVal [time (s)] = 0.0
      text [set every repeat] = $leftKeyText
      wrapWidth = 22
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    TextComponent rightKey_text
      letterHeight = .025
      pos = (0, .141)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rightKeyText
      wrapWidth = 22
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    TextComponent task_text5
      letterHeight = .025
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press the left or right button to continue
      wrapWidth = 22
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    TextComponent LeftReminder_text
      letterHeight = .035
      pos = (-.45, -.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $leftReminder
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    TextComponent rightReminder_text
      letterHeight = .03
      pos = (.45, -.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rightReminder
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    KeyboardComponent pracOrMain_keyResp
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_instruct_2
    TextComponent pracOrMain_Text_2
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 22
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      text:
        Color Game Practice

        Before each set of images is flashed on the screen, the word "Color" will be displayed to remind you of the game rules.

        Please rest your left finger on the Z key and your right finger on the M key throughout the game.

        When an image is shown, you should respond as quickly as you can while also being correct.
    TextComponent pracOrMain_text2_2
      letterHeight = 0.7
      pos = (0, -7)
      startVal [time (s)] = 0.0
      text = Press the space key to start the practice
      wrapWidth = 22
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    TextComponent LeftReminder_text_2
      letterHeight = 1
      pos = (-10, -10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $leftReminder
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    TextComponent rightReminder_text_2
      letterHeight = 1
      pos = (10, -10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rightReminder
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    KeyboardComponent pracOrMain_keyResp_2
      allowedKeys = 'z','m','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_instruct2
    CodeComponent pracOrMain_Code_2
      Code Type = Auto->JS
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      Begin Routine:
        if practice == 1:
            startText ='\n \n \n \n \n \n \n \n \n \n \n \n \n \n Press either the left or right button to practice this game'
        elif practice == 0:
                startText ='\n \n \n \n \n \n \n \n \n \n \n \n \n \n Press either the left or right button to start the real game'
    TextComponent taskName_2
      letterHeight = .035
      pos = (0, .176)
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskNameSource
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    TextComponent task_Text_2
      letterHeight = .025
      startVal [time (s)] = 0.0
      wrapWidth = 22
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      text [set every repeat]:
        Please rest your left finger on the left button and your right finger on the right button.
        When an image is shown, you should respond as quickly as you can while also being correct.
    TextComponent task_text_3
      letterHeight = .025
      startVal [time (s)] = 0.0
      text [set every repeat] = $cueReminderTextSource
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    TextComponent task_text_4
      letterHeight = .025
      startVal [time (s)] = 0.0
      text [set every repeat] = $startText
      wrapWidth = 22
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    TextComponent LeftReminder_text_5
      letterHeight = .035
      pos = (-.45, -.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $leftReminder
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    TextComponent rightReminder_text_5
      letterHeight = .035
      pos = (.45, -.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rightReminder
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    KeyboardComponent pracOrMain_keyResp_3
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine taskEnd_instruct
    CodeComponent pracOrMain_Code_3
      Code Type = Auto->JS
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      Begin Experiment:
        isForward = 0
        counterOne = 0
        counterTwo = 0
        msg = ''
      Begin Routine:
        if counterOne >= 6:
            msg = 'Lets move forward. Press the left or right button.'
            isForward = 0
            counterOne = 0
            counterTwo = 0
            colorblockLoop.finished = True
        else:
            isForward += 1
            if isForward == 3:
                msg = 'Lets move forward. Press the left or right button.'
                counterOne = 0
                counterTwo = 0
                isForward = 0
                colorblockLoop.finished = True
            else:
                msg = 'Please try the practice again. Press the left or right button.'
                counterOne = 0
                counterTwo = 0
                colorblockLoop.finished = False
    TextComponent taskEnd_text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine expEnd_intruct
    TextComponent taskEnd_text_2
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Press the left or right button to exit.
    KeyboardComponent key_resp_2
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jsCode
    CodeComponent jsCode_setup
      Code Type = JS
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      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine restbreak
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trialLoop.thisN == 0 or trialLoop.thisN % 16 != 0:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You may take a short break

        Press space to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine clearTrial
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if keyResp.keys:
            if keyResp.corr:
                counterOne +=1
            else:
                counterTwo +=1
        else:
            keyResp.corr = 0
            counterTwo +=1
  Routine taskEnd_instruct_2
    CodeComponent pracOrMain_Code_4
      Code Type = Auto->JS
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      Begin Experiment:
        isForward = 0
        counterOne = 0
        counterTwo = 0
        msg = ''
      Begin Routine:
        if counterOne >= 6:
            msg = 'Lets move forward. Press the left or right button.'
            isForward = 0
            counterOne = 0
            counterTwo = 0
            shapeblockLoop.finished = True
        else:
            isForward += 1
            if isForward == 3:
                msg = 'Lets move forward. Press the left or right button.'
                counterOne = 0
                counterTwo = 0
                isForward = 0
                shapeblockLoop.finished = True
            else:
                msg = 'Please try the practice again. Press the left or right button.'
                counterOne = 0
                counterTwo = 0
                shapeblockLoop.finished = False
    TextComponent taskEnd_text_3
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_4
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine taskEnd_instruct_3
    CodeComponent pracOrMain_Code_5
      Code Type = Auto->JS
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      Begin Experiment:
        isForward = 0
        counterOne = 0
        counterTwo = 0
        msg = ''
      Begin Routine:
        if counterOne >= 6:
            msg = 'Lets move forward. Press the left or right button.'
            isForward = 0
            counterOne = 0
            counterTwo = 0
            switchBlockLoop.finished = True
        else:
            isForward += 1
            if isForward == 3:
                msg = 'Lets move forward. Press the left or right button.'
                counterOne = 0
                counterTwo = 0
                isForward = 0
                switchBlockLoop.finished = True
            else:
                msg = 'Please try the practice again. Press the left or right button.'
                counterOne = 0
                counterTwo = 0
                switchBlockLoop.finished = False
    TextComponent taskEnd_text_4
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_5
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_cueLoop_2
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        shapecueLoop.finished=True
  Routine break_cueLoop_3
    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        switchCueLoop.finished=True
  Routine break_stimLoop_2
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        #back1_rotCenter = 999
        #back1_blueCenter = 999

        #back2_rotCenter = 999
        #back2_blueCenter = 999
      End Routine:
        #store 1back stim from this trial as 2back for next trial
        #back2_rotCenter = back1_rotCenter
        #back2_blueCenter = back1_blueCenter

        #store current stim from this trial as 1back for next trial
        #back1_rotCenter = rotCenter
        #back1_blueCenter = blueCenter

        shapeStimLoop.finished=True
  Routine break_stimLoop_3
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        #back1_rotCenter = 999
        #back1_blueCenter = 999

        #back2_rotCenter = 999
        #back2_blueCenter = 999
      End Routine:
        #store 1back stim from this trial as 2back for next trial
        #back2_rotCenter = back1_rotCenter
        #back2_blueCenter = back1_blueCenter

        #store current stim from this trial as 1back for next trial
        #back1_rotCenter = rotCenter
        #back1_blueCenter = blueCenter

        switchStimLoop.finished=True
  Routine StimRoutine_2
    CodeComponent isiCode_2
      Code Type = Both
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        reminderDur = (thisISI + 1.5);
        console.log("thisISI: ", thisISI);
        stimLoop.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1000, 1500, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        reminderDur = thisISI +1.5

        # show in console for debugging
        print('thisISI: ', thisISI)

        # save this ISI to our output file
        stimLoop.addData('ISI', thisISI)
    CodeComponent corrAnswerCode_2
      Code Type = Auto->JS
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      Begin Experiment:
        #possible cb:
        #BSOD
        #BDOS
        #ODBS
        #OSBD

        #hard-coded counterbalance for now. will update
        #to change based on user input
        CB = 'BSOD'

        if CB =='BSOD':
            blueKey = '1'
            squareKey = '1'
            orangeKey = '8'
            diagKey = '8'
        elif CB =='BDOS':
            blueKey = '1'
            squareKey = '8'
            orangeKey = '8'
            diagKey = '1'
        elif CB =='ODBS':
            blueKey = '8'
            squareKey = '8'
            orangeKey = '1'
            diagKey = '1'
        elif CB =='OSBD':
            blueKey = '8'
            squareKey = '1'
            orangeKey = '1'
            diagKey = '8'
      Begin Routine:
        if whichCue == 'SHAPE':
            if rotCenter == 315:
                corrAns = diagKey
            else:
                corrAns = squareKey
        elif whichCue == 'COLOR':
            if blueCenter == 1:
                corrAns = blueKey
            else:
                corrAns = orangeKey
        #elif whichCue == '1BACK COLOR':
        #    if back1_blueCenter == 1:
        #        corrAns = blueKey
        #    else:
        #        corrAns = orangeKey
        #elif whichCue == '1BACK SHAPE':
        #    if back1_blueCenter == 1:
        #        corrAns = diagKey
        #    else:
        #        corrAns = squareKey
        #elif whichCue == '2BACK COLOR':
        #    if back2_blueCenter == 1:
        #        corrAns = blueKey
        #    else:
        #        corrAns = orangeKey
        #elif whichCue == '2BACK SHAPE':
        #    if back2_blueCenter == 1:
        #        corrAns = diagKey
        #    else:
        #        corrAns = squareKey

        # save corrAns to our output file
        shapeStimLoop.addData('corrAns', corrAns)


        #        if key_resp_3.corr:
        #            corrAns == 'm'
        #            right = 'resources/assets/BlueBoatWhite.png'
        #        else:
        #            left = 'resources/assets/RedRabbitWhite.png'
        #    elif key_resp_3.keys[0] =='m':
        #        if key_resp_3.corr:
        #            right = 'resources/assets/BlueBoatRed.png'
        #           left = 'resources/assets/RedRabbitWhite.png'
        #           audio = 'resources/assets/Thatsright.mp3'
        #       else:
        #else: # thi is classed as an incorrect response
        #    if corrAns == 'm':
        #        right = 'resources/assets/BlueBoatRed.png'


        ## make range from a to b in n stepsizes
        #ISIRange = np.linspace(1000, 1500, 500)
        ## picking from a shuffled array is easier for random selection in JS
        #shuffle(ISIRange)
        #thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        ## show in console for debugging
        #print('thisISI: ', thisISI)
    TextComponent LeftReminder_text_6
      letterHeight = .035
      pos = (-.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $leftReminder
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    TextComponent rightReminder_text_6
      letterHeight = .035
      pos = (.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $rightReminder
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    ImageComponent centerPresented_2
      image [set every repeat] = $center
      ori [set every repeat] = $rotCenter
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1
      texture resolution = 512
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    ImageComponent topPresented_2
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (0, .18)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent rightPresented_2
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (.18, 0)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent bottomPresented_2
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (0, -.18)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent leftPresented_2
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (-.18, 0)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    CodeComponent stim_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #1
        Connected = True

        #Start the read thread
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
      Begin Routine:
        # Clear ports
        #port.write([0xFF])



        # time to wait before clearing the ports after a trigger (in seconds)
        postTriggerPauseTime_1 = 0.04
        pauseStartTime_1 = 0
        triggerSent_1 = False
        portsCleared_1 = False
      Each Frame:
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      End Experiment:
        #5
        port.close()
      End Routine:
        #4

        Connected = False
        thread.join(1.0)
    KeyboardComponent keyResp_2
      allowedKeys = '1','8'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent resp_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #1

        Connected = True

        #Start the read thread
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
      Begin Routine:
        #2
        mark_started = False
        mark_ended = False

        # Clear ports
        port.write([0x00])
        Connected = False
        thread.join(1.0)

        keys_counted = []

        # time to wait before clearing the ports after a trigger (in seconds)
        postTriggerPauseTime = 0.05
        pauseStartTime = 0
        triggerSent = False
        portsCleared = True
      Each Frame:
        #3
        if keyResp.keys and len(keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(keyResp.keys[-1])
            if keyResp.keys[-1] == corrAns:# if the last key pressed was correct
                port.write([0x10]) # send trigger
                time.sleep(PulseWidth)
                triggerSent = True
                portsCleared = False
                pauseStartTime = t
            elif keyResp.keys[-1] != corrAns:# if the last key pressed was not correct
                port.write([0x04])# send different trigger
                time.sleep(PulseWidth)
                triggerSent = True
                portsCleared = False
                pauseStartTime = t

        # if a trigger was send, "clear" the bugger after 100ms
        if triggerSent and not portsCleared:
            if t > (pauseStartTime + postTriggerPauseTime):
                triggerSent = False
                portsCleared = True
      End Experiment:
        #5
        port.close()
      End Routine:
        #4
        if not keyResp.keys or len(keyResp.keys) == 0:
               port.write([0x03])# send a trigger
               time.sleep(PulseWidth)
  Routine StimRoutine_3
    CodeComponent isiCode_3
      Code Type = Both
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        reminderDur = (thisISI + 1.5);
        console.log("thisISI: ", thisISI);
        stimLoop.addData("ISI", thisISI);
      Begin Routine:
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    CodeComponent corrAnswerCode_3
      Code Type = Auto->JS
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      Begin Experiment:
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      Begin Routine:
        if whichCue == 'SHAPE':
            if rotCenter == 315:
                corrAns = diagKey
            else:
                corrAns = squareKey
        elif whichCue == 'COLOR':
            if blueCenter == 1:
                corrAns = blueKey
            else:
                corrAns = orangeKey
        #elif whichCue == '1BACK COLOR':
        #    if back1_blueCenter == 1:
        #        corrAns = blueKey
        #    else:
        #        corrAns = orangeKey
        #elif whichCue == '1BACK SHAPE':
        #    if back1_blueCenter == 1:
        #        corrAns = diagKey
        #    else:
        #        corrAns = squareKey
        #elif whichCue == '2BACK COLOR':
        #    if back2_blueCenter == 1:
        #        corrAns = blueKey
        #    else:
        #        corrAns = orangeKey
        #elif whichCue == '2BACK SHAPE':
        #    if back2_blueCenter == 1:
        #        corrAns = diagKey
        #    else:
        #        corrAns = squareKey

        # save corrAns to our output file
        switchStimLoop.addData('corrAns', corrAns)


        #        if key_resp_3.corr:
        #            corrAns == 'm'
        #            right = 'resources/assets/BlueBoatWhite.png'
        #        else:
        #            left = 'resources/assets/RedRabbitWhite.png'
        #    elif key_resp_3.keys[0] =='m':
        #        if key_resp_3.corr:
        #            right = 'resources/assets/BlueBoatRed.png'
        #           left = 'resources/assets/RedRabbitWhite.png'
        #           audio = 'resources/assets/Thatsright.mp3'
        #       else:
        #else: # thi is classed as an incorrect response
        #    if corrAns == 'm':
        #        right = 'resources/assets/BlueBoatRed.png'


        ## make range from a to b in n stepsizes
        #ISIRange = np.linspace(1000, 1500, 500)
        ## picking from a shuffled array is easier for random selection in JS
        #shuffle(ISIRange)
        #thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        ## show in console for debugging
        #print('thisISI: ', thisISI)
    TextComponent LeftReminder_text_7
      letterHeight = .035
      pos = (-.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $leftReminder
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    TextComponent rightReminder_text_7
      letterHeight = .035
      pos = (.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $rightReminder
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    ImageComponent centerPresented_3
      image [set every repeat] = $center
      ori [set every repeat] = $rotCenter
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1
      texture resolution = 512
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    ImageComponent topPresented_3
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (0, .18)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent rightPresented_3
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (.18, 0)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent bottomPresented_3
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (0, -.18)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent leftPresented_3
      image [set every repeat] = $surround
      ori [set every repeat] = $rotSurround
      pos = (-.18, 0)
      size = (.1, .1)
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    CodeComponent stim_code_3
      Code Type = Auto->JS
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      Begin Experiment:
        #1
        Connected = True

        #Start the read thread
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
      Begin Routine:
        # Clear ports
        #port.write([0xFF])



        # time to wait before clearing the ports after a trigger (in seconds)
        postTriggerPauseTime_1 = 0.04
        pauseStartTime_1 = 0
        triggerSent_1 = False
        portsCleared_1 = False
      Each Frame:
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      End Experiment:
        #5
        port.close()
      End Routine:
        #4

        Connected = False
        thread.join(1.0)
    KeyboardComponent keyResp_3
      allowedKeys = '1','8'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $thisISI
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent resp_code_3
      Code Type = Auto->JS
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      Begin Experiment:
        #1

        Connected = True

        #Start the read thread
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
      Begin Routine:
        #2
        mark_started = False
        mark_ended = False

        # Clear ports
        port.write([0x00])
        Connected = False
        thread.join(1.0)

        keys_counted = []

        # time to wait before clearing the ports after a trigger (in seconds)
        postTriggerPauseTime = 0.05
        pauseStartTime = 0
        triggerSent = False
        portsCleared = True
      Each Frame:
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      End Experiment:
        #5
        port.close()
      End Routine:
        #4
        if not keyResp.keys or len(keyResp.keys) == 0:
               port.write([0x03])# send a trigger
               time.sleep(PulseWidth)
  Routine cueRoutine_2
    CodeComponent rsiCode_2
      Code Type = Both
      Begin Experiment:
        reminderDur = 1000
      Begin JS Experiment:
        reminderDur = 1000;
      Begin JS Routine:
        RSIRange = linspace(1000, 1500, 500);
        shuffle(RSIRange);
        thisRSI = (RSIRange[0] / 1000);
        reminderDur = (thisRSI + 1);
        console.log("thisRSI: ", thisRSI);
        cueLoop.addData("RSI", thisRSI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        RSIRange = np.linspace(1000, 1500, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(RSIRange)
        thisRSI = RSIRange[0]/1000 # the first item of the shuffled array

        reminderDur = thisRSI +1

        # show in console for debugging
        print('thisRSI: ', thisRSI)

        # save this ISI to our output file
        shapecueLoop.addData('RSI', thisRSI)
    TextComponent LeftReminder_text_8
      letterHeight = .035
      pos = (-.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $leftReminder
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    TextComponent rightReminder_text_8
      letterHeight = .035
      pos = (.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $rightReminder
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    TextComponent cuePresented_2
      letterHeight = .035
      startVal [time (s)] = $thisRSI
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $whichCue
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    CodeComponent cue_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #1
        import serial
        import time
        import threading
        Connected = True
        def ReadThread(port):
            while Connected:
                if port.inWaiting() > 0:
                    print ("0x%X"%ord(port.read(1)))
        #port = serial.Serial('COM3')
        #Start the read thread
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
        port.write([0xFF])
      Begin Routine:
        #2
        pulse_started = False
        pulse_ended = False
      Each Frame:
        #3
        if cuePresented.status == STARTED and not pulse_started:
            if whichCue == 'SHAPE':
                port.write([0x01])#S1 for 'SHAPE' cue.
                pulse_start_time = globalClock.getTime()
                pulse_started = True
            elif whichCue == 'COLOR':
                port.write([0x02])#S2 for 'COLOR' cue.
                pulse_start_time = globalClock.getTime()
                pulse_started = True
        if pulse_started and not pulse_ended:
            if globalClock.getTime() - pulse_start_time >= 0.005:
                #port.write([0x02])
                pulse_ended = True
      End Experiment:
        #5
        port.close()
      End Routine:
        #4
  Routine cueRoutine_3
    CodeComponent rsiCode_3
      Code Type = Both
      Begin Experiment:
        reminderDur = 1000
      Begin JS Experiment:
        reminderDur = 1000;
      Begin JS Routine:
        RSIRange = linspace(1000, 1500, 500);
        shuffle(RSIRange);
        thisRSI = (RSIRange[0] / 1000);
        reminderDur = (thisRSI + 1);
        console.log("thisRSI: ", thisRSI);
        cueLoop.addData("RSI", thisRSI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        RSIRange = np.linspace(1000, 1500, 500)
        # picking from a shuffled array is easier for random selection in JS
        shuffle(RSIRange)
        thisRSI = RSIRange[0]/1000 # the first item of the shuffled array

        reminderDur = thisRSI +1

        # show in console for debugging
        print('thisRSI: ', thisRSI)

        # save this ISI to our output file
        switchCueLoop.addData('RSI', thisRSI)
    TextComponent LeftReminder_text_9
      letterHeight = .035
      pos = (-.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $leftReminder
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    TextComponent rightReminder_text_9
      letterHeight = .035
      pos = (.45, -.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reminderDur
      text [set every repeat] = $rightReminder
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    TextComponent cuePresented_3
      letterHeight = .035
      startVal [time (s)] = $thisRSI
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $whichCue
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    CodeComponent cue_code_3
      Code Type = Auto->JS
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      Begin Experiment:
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      Begin Routine:
        #2
        pulse_started = False
        pulse_ended = False
      Each Frame:
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      End Experiment:
        #5
        port.close()
      End Routine:
        #4
Flow
  Routine jsCode
  Routine beginInstruct
  Routine beginInstruct_2a
  Routine beginInstruct_3a
  LoopInitiator colorblockLoop loopType="TrialHandler"
    conditions = [OrderedDict([('whichBlock', 'color.xlsx'), ('practice', 1), ('numberReps', 1), ('taskNameSource', 'COLOR Game Practice'), ('taskTextSource', '\n\n\n\nIn this game, you have to focus on the COLOR of the center image\n\nPress the left button with your left index finger, if:\n\nPress the right button with your right index finger, if:\n\n\nLabels in the lower-left and lower-right of the screen will remind you\nwhich hand to use for which COLOR. Ignore the shape words for now.'), ('cueReminderTextSource', '\n\n\n\n\n\n\nThe word COLOR will be presented before each\nimage to remind you what to do.'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
    conditionsFile = inhib_practiceblockSelect_Color.csv
    loopType = sequential
    nReps = 2
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    Routine task_instruct
    Routine task_instruct2
    LoopInitiator trialLoop loopType="TrialHandler"
      conditionsFile = practice_faceSelect.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('whichFace', 'face1F1_Fa.xlsx')]),
        OrderedDict([('whichFace', 'face1F1_Sc.xlsx')]),
        OrderedDict([('whichFace', 'face2M1_Fa.xlsx')]),
        OrderedDict([('whichFace', 'face2M1_Sc.xlsx')]),
        OrderedDict([('whichFace', 'face3M1_Fa.xlsx')]),
        OrderedDict([('whichFace', 'face3M1_Sc.xlsx')]),
        OrderedDict([('whichFace', 'face4F1_Fa.xlsx')]),
        OrderedDict([('whichFace', 'face4F1_Sc.xlsx')])]
      LoopInitiator cueLoop loopType="TrialHandler"
        conditionsFile = $whichBlock
        loopType = fullRandom
        nReps = 1
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        Routine cueRoutine
        Routine break_cueLoop
      LoopTerminator cueLoop
      LoopInitiator stimLoop loopType="TrialHandler"
        conditionsFile = $whichFace
        loopType = random
        nReps = 1
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        Routine StimRoutine
        Routine break_stimLoop
      LoopTerminator stimLoop
      Routine clearTrial
    LoopTerminator trialLoop
    Routine taskEnd_instruct
  LoopTerminator colorblockLoop
  LoopInitiator shapeblockLoop loopType="TrialHandler"
    conditions = [OrderedDict([('whichBlock', 'shape.xlsx'), ('practice', 1), ('numberReps', 1), ('taskNameSource', 'SHAPE Game Practice'), ('taskTextSource', '\n\n\n\nIn this game, you have to focus on the SHAPE of the center image\n\nPress the left button with your left index finger, if:\n\nPress the right button with your right index finger, if:\n\n\nLabels in the lower-left and lower-right of the screen will remind you\nwhich hand to use for which SHAPE. Ignore the color words for now.'), ('cueReminderTextSource', '\n\n\n\n\n\n\nThe word SHAPE will be presented before each image to remind you what to do.')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
    conditionsFile = inhib_practiceblockSelect_Shape.csv
    loopType = random
    nReps = 2
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    Routine task_instruct
    Routine task_instruct2
    LoopInitiator shapetrialLoop loopType="TrialHandler"
      conditionsFile = practice_faceSelect.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('whichFace', 'face1F1_Fa.xlsx')]),
        OrderedDict([('whichFace', 'face1F1_Sc.xlsx')]),
        OrderedDict([('whichFace', 'face2M1_Fa.xlsx')]),
        OrderedDict([('whichFace', 'face2M1_Sc.xlsx')]),
        OrderedDict([('whichFace', 'face3M1_Fa.xlsx')]),
        OrderedDict([('whichFace', 'face3M1_Sc.xlsx')]),
        OrderedDict([('whichFace', 'face4F1_Fa.xlsx')]),
        OrderedDict([('whichFace', 'face4F1_Sc.xlsx')])]
      LoopInitiator shapecueLoop loopType="TrialHandler"
        conditionsFile = $whichBlock
        loopType = random
        nReps = 1
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        Routine cueRoutine_2
        Routine break_cueLoop_2
      LoopTerminator shapecueLoop
      LoopInitiator shapeStimLoop loopType="TrialHandler"
        conditionsFile = $whichFace
        loopType = random
        nReps = 1
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        Routine StimRoutine_2
        Routine break_stimLoop_2
      LoopTerminator shapeStimLoop
      Routine clearTrial
    LoopTerminator shapetrialLoop
    Routine taskEnd_instruct_2
  LoopTerminator shapeblockLoop
  LoopInitiator switchBlockLoop loopType="TrialHandler"
    conditions = [OrderedDict([('whichBlock', 'switch.xlsx'), ('practice', 1), ('numberReps', 1), ('taskNameSource', 'SWITCH Game Practice'), ('taskTextSource', '\n\n\n\n\n\nIn this game, you have to SWITCH your focus\nto either the COLOR or SHAPE or the center image.\nIf the word appearing before the image says COLOR,\nthen focus on the COLOR of the center image.\nHowever, if the word appearing before the image says SHAPE,\nthen focus on the SHAPE of the center image.\n\nPress the left button with your left index finger, if:\n\n\nPress the right button with your right index finger, if:\n\n\n\nLabels in the lo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
    conditionsFile = switchonly_practiceblockSelect.csv
    loopType = random
    nReps = 2
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    Routine task_instruct
    Routine task_instruct2
    LoopInitiator switchtrialLoop loopType="TrialHandler"
      conditionsFile = practice_faceSelect.csv
      loopType = random
      nReps = 1
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      conditions:
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      LoopInitiator switchCueLoop loopType="TrialHandler"
        conditionsFile = $whichBlock
        loopType = random
        nReps = 1
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        Routine cueRoutine_3
        Routine break_cueLoop_3
      LoopTerminator switchCueLoop
      LoopInitiator switchStimLoop loopType="TrialHandler"
        conditionsFile = $whichFace
        loopType = random
        nReps = 1
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        Routine StimRoutine_3
        Routine break_stimLoop_3
      LoopTerminator switchStimLoop
      Routine clearTrial
    LoopTerminator switchtrialLoop
    Routine taskEnd_instruct_3
  LoopTerminator switchBlockLoop
  Routine expEnd_intruct
